PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = simplestop_skeleton
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine StimSetup
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    CodeComponent stim_setup
      Code Type = Py
      Begin Experiment:
        #***************************

        from copy import deepcopy
        import random

        color = 'black'
        shapes = ["circle", "circle", "square", "square"]
        conditions = ['go', 'go', 'stop']
        totalShapesUsed = 4
        numStim = 4
        stopTaskTrials = 144
        numStopPracTrials = 24
        practice_blocks = 3
        numTrialsPerBlock = 48
        numTestBlocks = int(stopTaskTrials / numTrialsPerBlock)
        stopTrialList = []
        stopPracTrialList = []
        possible_responses = [
          ["circle", 'left'],
          ["circle", 'left'],
          ["square", 'right'],
          ["square", 'right'],
        ]

        InitSSD = .35
        SSD = InitSSD

        def createTrialTypes(numTrialsPerBlock, color, shapes, conditions, totalShapesUsed):
            unique_combos = len(conditions) * totalShapesUsed

            stims = []
            for x in range(len(conditions)):
                for j in range(totalShapesUsed):
                    stim = {
                        'fileName': shapes[j]+color+'.png',
                        'correct_response': possible_responses[j][1],
                        'condition': conditions[x]
                    }
                    stims.append(stim)


            iterations = int(numTrialsPerBlock / unique_combos)

            final_stims = []
            for k in range(iterations):
                shuffled_stims = stims.copy()  # Make a copy of stims before shuffling
                random.shuffle(shuffled_stims)
                final_stims.append(shuffled_stims)


            res = [dictionary for sublist in final_stims for dictionary in sublist]


            return res

        #***************************

        stopPracTrialList = createTrialTypes(numStopPracTrials, color, shapes, conditions, totalShapesUsed)

        thisExp.addData("stopPracTrialList", stopPracTrialList)
  Routine instructions
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    TextComponent instrStopText
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        In this task you will see shapes appear on the screen one at a time.

        Only one response is correct for each shape.

        If the shape is a circle press the index finger.
        If the shape is a square press the middle finger.

        You should respond as quickly and accurately as possible to each shape.

        On some trials, a star will appear around the shape.  The star can appear with, or shortly after the shape appears.

        If you see a star appear, please try your best to withhold your response on that trial. If the star appears on a trial, and you try your best to withhold your response, you will find that you will be able to stop sometimes but not always.

        Please do not slow down your responses to wait for the star to appear.  Continue to respond as quickly and accurately as possible.

        We will start the practice when you finish the instructions. Please make sure you understand the rules before moving on. During practice, you will see a reminder of the rules in the top left of the screen and receive feedback on your performance. This will be removed for test.

        Press enter to continue.
    KeyboardComponent start_prac
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      store = nothing
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  Routine newPracticeStim
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    CodeComponent practice_stims
      Code Type = Py
      Begin Routine:
        #***************************
        practiceTrials.addData("StartTrialTimeStamp", core.getTime())

        currentStopPracTrial = stopPracTrialList.pop(0)
        currentGoStim = currentStopPracTrial['fileName']
        currentCorrectResponse = currentStopPracTrial['correct_response']
        currentStopOrGo = currentStopPracTrial['condition']

        if currentStopOrGo == 'stop':
            stopSignal.opacity = 1
        elif currentStopOrGo == 'go':
            stopSignal.opacity = 0

        practiceTrials.addData("trialType", currentStopOrGo)
        practiceTrials.addData("goStim", currentGoStim)
        practiceTrials.addData("correctResponse", currentCorrectResponse)
        practiceTrials.addData("ssd", SSD)

        SSDInput = SSD + .5 # +.5 because that's the duration of the fixation cross before the go stim appears

        #***************************
  Routine startPractice
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  Routine trial
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    TextComponent fixation
      letterHeight = .15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    ImageComponent goStim
      image [set every repeat] = $currentGoStim
      pos [set every repeat] = $[0, 0]
      size = [151, 151]
      startVal [time (s)] = .5
      stopVal [duration (s)] = 1
      units = pix
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    KeyboardComponent goResp
      allowedKeys = 'left', 'right'
      correctAns = $currentCorrectResponse
      forceEndRoutine = False
      startVal [time (s)] = .5
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    ImageComponent stopSignal
      image = stopSignal.png
      size = (0.5, 0.5)
      startEstim = .75
      startVal [time (s)] = $SSDInput
      stopVal [duration (s)] = .5
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    TextComponent rules
      letterHeight = 0.03
      pos = (-.6, .4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Circle: Index Finger
        Square: Middle Finger
        Do not respond if a star appears!
  Routine trial_2
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  Routine feedback
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    CodeComponent practice_feedback
      Code Type = Py
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      Begin Experiment:
        #***************************

        #message variable just needs some value at start
        feedbackMessage=None

        #***************************
      Begin Routine:
        if currentStopOrGo == 'stop' and goResp.keys is None:
            feedbackMessage = "Correct"
        else:
            feedbackMessage = "There was a star"


        if currentStopOrGo == 'go' and goResp.keys == currentCorrectResponse:
            feedbackMessage = "Correct"
        elif currentStopOrGo == 'go' and goResp.keys is None:
            feedbackMessage = "Respond Faster"
        elif currentStopOrGo == 'go' and goResp.keys != currentCorrectResponse and goResp.keys is not None:
            feedbackMessage = "Incorrect"
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every repeat] = $feedbackMessage
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    TextComponent rules_2
      letterHeight = 0.03
      pos = (-.6, .4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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      text:
        Circle: Index Finger
        Square: Middle Finger
        Do not respond if a star appears!
  Routine blank
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    TextComponent fixation_2
      letterHeight = .15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    TextComponent rules_3
      letterHeight = 0.03
      pos = (-.6, .4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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      text:
        Circle: 'Z' Key
        Square: 'M' Key
        Do not respond if a star appears!
  Routine endTrial
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    CodeComponent practice_trial_end
      Code Type = Py
      Begin Routine:
        #***************************
        print(f'practice currentSSD: {SSD}')
        #Adjusting SSD within a range of 0-1s
        if currentStopPracTrial['condition'] == 'stop':
            if goResp.keys is None:
                if SSD <= 0.95:
                    SSD = round(deepcopy(SSD)  + .05, 2)
                    print("Successful stop.")
                    print(f'practice adujsted SSD: {SSD}')
            else:
                if SSD >= .05:
                    SSD = round(deepcopy(SSD)  - .05, 2)
                    print("Failed stop.")
                    print(f'practice adujsted SSD: {SSD}')

        if currentStopPracTrial['condition'] == 'go':
            goTrialCount = goTrialCount + 1

        if goResp.keys == currentCorrectResponse and currentStopPracTrial['condition'] == 'go':
            goCumRT = goCumRT + goResp.rt
            goRTCount = goRTCount + 1

        if currentStopPracTrial['condition'] == 'stop':
            stopTrialCount = stopTrialCount + 1

        if currentStopPracTrial['condition'] == 'stop' and goResp.keys is None:
            stopSuccessCount = stopSuccessCount + 1

        if currentStopPracTrial['condition'] == 'go':
            if goResp.keys is None:
                omissionCount = omissionCount + 1
                print(f'{omissionCount}')
            elif goResp.keys != currentCorrectResponse:
                commissionCount = commissionCount + 1
                print(f'{commissionCount}')
            else:
                print("practice wasnt omission or comission! yay.")

        #Outputting a bunch of variables
        practiceTrials.addData("fixationOnset", fixation.tStart)
        practiceTrials.addData("goStimOnset", goStim.tStart)
        if SSD  != -1:
            practiceTrials.addData("stopSignalOnset", stopSignal.tStart)

        #***************************
      End Routine:
        practiceTrials.addData("EndTrialTimeStamp", core.getTime())
        practiceTrials.addData("Phase", phase)
        practiceTrials.addData("Block", block)
  Routine practiceFeedback
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    CodeComponent practice_block_feedback
      Code Type = Py
      Begin Experiment:
        accuracy_thresh = 0.8
        missed_thresh = 0.1
        maxSSD = 1000
        minSSD = 0

        rt_thresh = 1000
        missed_response_thresh = 0.1
        commision_thresh = 0.25

        maxStopCorrect = 0.7
        minStopCorrect = 0.3

        maxStopCorrectPractice = 1
        minStopCorrectPractice = 0

        practiceCount = 0
        practiceEnd = 0
      Begin Routine:
        #***************************
        import numpy as np

        if goRTCount > 0:
            goRTFeedback = goCumRT/goRTCount
            goRTFeedback = round(goRTFeedback, 2)
        else:
            goRTFeedback = 'Null'

        if goTrialCount > 0:
            commissionRate = (commissionCount/goTrialCount)
            print(f'comissionCount: {commissionCount}')
            print(f'goTrialCount: {goTrialCount}')
            commissionRate = round(commissionRate, 2)
            omissionRate = (omissionCount/goTrialCount)
            omissionRate = round(omissionRate, 2)
            print(f'omissionCount: {omissionCount}')
        else:
            commissionRate = 1
            omissionRate = 1

        if stopTrialCount > 0:
            probabilityOfStop = stopSuccessCount/stopTrialCount
            probabilityOfStop = round(probabilityOfStop, 2)
        else:
            probabilityOfStop = 1

        SSDFeedback = SSD
        SSDFeedback = round(SSDFeedback, 2)

        print(f'comission_rate: {commissionRate}, omission_rate: {omissionRate}')

        stopMessage = "\nPlease take this time to read your feedback if there is any, and take a short (1 minute) break. Press enter to continue.\n"

        practiceCount += 1
        block += 1
        if practiceCount == practice_blocks:
            practiceEnd = 1
            stopMessage = "Done with this practice.\nPress enter to continue."
        elif commissionRate <= commision_thresh and probabilityOfStop < maxStopCorrectPractice and probabilityOfStop > minStopCorrectPractice:
            practiceEnd = 1
            stopMessage = "Done with this practice.\nPress enter to continue."

        else:
            stopMessage = "Redoing this practice.\n"

            if commissionRate > commision_thresh:
                stopMessage += "\n Your accuracy is too low. Remember:" \
                                + "\n\tCircle: Index Finger" \
                                + "\n\tSquare: Middle Finger"

            if goRTFeedback != 'Null' and goRTFeedback > rt_thresh:
                stopMessage += "\n\nYou have been responding too slowly, please respond to each shape as quickly and as accurately as possible."

            if omissionRate > missed_response_thresh:
                if commissionRate > commision_thresh:
                    stopMessage += "\n\nWe have detected a number of trials that required a response, where no response was made.  Please ensure that you are responding accurately and quickly to the shapes."
                else:
                    stopMessage += "\n\nWe have detected a number of trials that required a response, where no response was made.  Please ensure that you are responding accurately and quickly to the shapes." \
                                + "\n Your accuracy is too low. Remember:" \
                                + "\n\tCircle: Index Finger" \
                                + "\n\tSquare: Middle Finger"

            if probabilityOfStop == minStopCorrectPractice:
                stopMessage += "\n\nYou have not been stopping your response when stars are present.  Please try your best to stop your response if you see a star."
            elif probabilityOfStop == maxStopCorrectPractice:
                stopMessage += "\n\nDo not slow down and wait for the star to appear. Please respond as quickly and accurately as possible when a star does not appear."

            stopMessage += "\nPress enter to continue"
        #***************************
    TextComponent text_5
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $stopMessage
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine trialConditional
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        nRepStopTrial = 0
        nRepGoTrial = 0
      Begin Routine:
        if currentStopOrGo == 'go':
            nRepStopTrial = 0
            nRepGoTrial = 1
         elif currentStopOrGo == 'stop':
            nRepStopTrial = 1
            nRepGoTrial = 0
  Routine feedback_2
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  Routine practiceRepeat
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    CodeComponent practice_block_loop
      Code Type = Py
      Begin Routine:
        stopPracTrialList = createTrialTypes(numStopPracTrials, color, shapes, conditions, totalShapesUsed)

        thisExp.addData("stopPracTrialList", stopPracTrialList)
        if practiceEnd == 1:
            practiceBlocks.finished = True
  Routine stopBlockSetup
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    CodeComponent test_block_vars
      Code Type = Py
      Begin Routine:
        #***************************

        goCumRT = 0
        goRTCount = 0
        omissionCount = 0
        commissionCount = 0
        stopTrialCount = 0
        stopSuccessCount = 0
        goTrialCount = 0
        #***************************
  Routine newStopStim
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    CodeComponent test_stims
      Code Type = Py
      Begin Routine:
        #***************************
        testTrials.addData("StartTrialTimeStamp", core.getTime())

        currentStopTestTrial = stopTrialList.pop(0)
        currentGoStim = currentStopTestTrial['fileName']
        currentCorrectResponse = currentStopTestTrial['correct_response']
        currentStopOrGo = currentStopTestTrial['condition']
        currentSSD = SSD

        if currentStopOrGo == 'stop':
            stopSignal_test.opacity = 1
        elif currentStopOrGo == 'go':
            stopSignal_test.opacity = 0

        testTrials.addData("trialType", currentStopOrGo)
        testTrials.addData("goStim", currentGoStim)
        testTrials.addData("correctResponse", currentCorrectResponse)
        testTrials.addData("ssd", currentSSD)

        SSDInput = SSD + .5 # +.5 because that's the duration of the fixation cross before the go stim appears

        #***************************
  Routine ITI
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    TextComponent fixation_3
      letterHeight = .15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine ssdChange
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    CodeComponent ssd_staircase
      Code Type = Py
      Begin Routine:
        #***************************
        print(f'test current SSD: {SSD}')
        #Adjusting SSD within a range of 0-1s
        if currentStopTestTrial['condition'] == 'stop':
            print(currentStopTestTrial['condition'])
            if goResp_test.keys is None:
                if SSD <= 0.95:
                    SSD = round(deepcopy(SSD)  + .05, 2)
                    print("Successful stop wtf.")
                    print(f'test adujsted SSD: {SSD}')
            else:
                if SSD >= 0.05:
                    SSD = round(deepcopy(SSD)  - .05, 2)
                    print("Failed stop wtf.")
                    print(f'test adujsted SSD: {SSD}')


        if currentStopTestTrial['condition'] == 'go':
            goTrialCount = goTrialCount + 1

        if goResp_test.keys == currentCorrectResponse and currentStopTestTrial['condition'] == 'go':
            goCumRT = goCumRT + goResp_test.rt
            goRTCount = goRTCount + 1

        if currentStopTestTrial['condition'] == 'stop':
            stopTrialCount = stopTrialCount + 1

        if currentStopTestTrial['condition'] == 'stop' and goResp_test.keys is None:
            stopSuccessCount = stopSuccessCount + 1

        print('goResp_test.corr: goResp_test.corr')

        if currentStopTestTrial['condition'] == 'go':
            if goResp_test.keys is None:
                omissionCount = omissionCount + 1
            elif goResp_test.keys != currentCorrectResponse:
                commissionCount = commissionCount + 1

        #Outputting a bunch of variables
        testTrials.addData("fixationOnset", test_fixation.tStart)
        testTrials.addData("goStimOnset", goStim_test.tStart)
        if currentStopTestTrial['condition'] == 'stop':
            testTrials.addData("stopSignalOnset", stopSignal_test.tStart)

        #***************************
      End Routine:
        #***************************

        testTrials.addData("EndingSSD", SSD)
        testTrials.addData("EndTrialTimeStamp", core.getTime())

        testTrials.addData("Block", block)
        testTrials.addData("Phase", phase)
        #***************************
  Routine endOfStopBlockFeedback
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    CodeComponent test_block_feedback
      Code Type = Py
      Before Experiment:
        maxSSD = 1
        minSSD = 0

        rt_thresh = 1000
        missed_response_thresh = 0.1
        commision_thresh = 0.25

        maxStopCorrect = 0.7
        minStopCorrect = 0.3
      Begin Routine:
        #***************************

        if goRTCount > 0:
            goRTFeedback = goCumRT/goRTCount
            goRTFeedback = round(goRTFeedback, 2)
        else:
            goRTFeedback = 'Null'

        if goTrialCount > 0:
            commissionRate = (commissionCount/goTrialCount)
            commissionRate = round(commissionRate, 2)
            omissionRate = (omissionCount/goTrialCount)
            omissionRate = round(omissionRate, 2)
        else:
            commissionRate = 'Null'
            omissionRate = 'Null'

        if stopTrialCount > 0:
            probabilityOfStop = stopSuccessCount/stopTrialCount
            probabilityOfStop = round(probabilityOfStop, 2)
        else:
            probabilityOfStop = 'Null'

        SSDFeedback = (SSD)/2
        SSDFeedback = round(SSDFeedback, 2)

        testBlockCount += 1
        block +=1
        stopMessage = f"You have completed {testBlockCount} of {numTestBlocks}."

        if testBlockCount == numTestBlocks:
            stopMessage += "\n You have finished the testing phase."
        else:
            stopMessage += "\nPlease take this time to read your feedback if there is any, and take a 1 minute break.\n"

            if commissionRate > commision_thresh:
                stopMessage += "\n Your accuracy is too low. Remember:" \
                                + "\n\tCircle: Index Finger" \
                                + "\n\tSquare: Middle Finger"

            if goRTFeedback != 'Null' and goRTFeedback > rt_thresh:
                stopMessage += "\nYou have been responding too slowly, please respond to each shape as quickly and as accurately as possible."

            if omissionRate > missed_response_thresh:
                if commissionRate > commision_thresh:
                    stopMessage += "\n\nWe have detected a number of trials that required a response, where no response was made.  Please ensure that you are responding accurately and quickly to the shapes."
                else:
                    stopMessage += "\n\nWe have detected a number of trials that required a response, where no response was made.  Please ensure that you are responding accurately and quickly to the shapes." \
                                + "\n Your accuracy is too low. Remember:" \
                                + "\n\tCircle: Index Finger" \
                                + "\n\tSquare: Middle Finger"

            if probabilityOfStop < minStopCorrect:
                stopMessage += "\nYou have not been stopping your response when stars are present.  Please try your best to stop your response if you see a star."
            elif probabilityOfStop > maxStopCorrect:
                stopMessage += "\nDo not slow down and wait for the star to appear. Please respond as quickly and accurately as possible when a star does not appear."

        stopMessage += "\n\nPress enter to continue."


        print(f'comission_rate: {commissionRate}, omission_rate: {omissionRate}')
        print(stopMessage)

        #***************************

        stopTrialList = createTrialTypes(numTrialsPerBlock, color, shapes, conditions, totalShapesUsed)

        thisExp.addData(f"Test Block: {testBlockCount}", stopTrialList)
    TextComponent text_6
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $stopMessage
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    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine testInstructions
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      store = nothing
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    TextComponent testText
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        We will now begin the testing phase. To summarize the instructions.

        If the shape is a circle press Index Finger.
        If the shape is a square press Middle Finger.

        You should respond as quickly and accurately as possible to each shape.

        On some trials, a star will appear around the shape. If you see a star appear, please try your best to withhold your response on that trial.

        Please do not slow down your responses to wait for the star to appear.  You should respond as quickly and accurately as possible as soon as you see the shapes appear on the screen.

        Press enter to start the testing.
    CodeComponent test_setup
      Code Type = Py
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      Begin Experiment:
        testBlockCount = 0
        stopTrialList = createTrialTypes(numTrialsPerBlock, color, shapes, conditions, totalShapesUsed)

        thisExp.addData(f"Test Block: 1", stopTrialList)
      Begin Routine:
        phase = "test"
        block = 1
  Routine practiceBlockSetup
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    CodeComponent practice_block
      Code Type = Py
      Begin Experiment:
        block = 1
      Begin Routine:
        #***************************
        goCumRT = 0
        goRTCount = 0
        omissionCount = 0
        commissionCount = 0
        stopTrialCount = 0
        stopSuccessCount = 0
        goTrialCount = 0

        #***************************
        trialCount = 0
        phase = "practice"
  Routine Welcome
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    TextComponent welcome_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Welcome to the Task!

        Press enter to start.
  Routine start
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    TextComponent welcome
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        Welcome to the task!

        Press enter to continue.
    KeyboardComponent start_exp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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  Routine end
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    TextComponent ending_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        Thanks for completing this task!
        Press enter to end.
    KeyboardComponent end_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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  Routine test_trial
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    TextComponent test_fixation
      letterHeight = .15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    ImageComponent goStim_test
      image [set every repeat] = $currentGoStim
      pos [set every repeat] = $[0, 0]
      size = [151, 151]
      startVal [time (s)] = .5
      stopVal [duration (s)] = 1
      units = pix
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    KeyboardComponent goResp_test
      allowedKeys = 'left', 'right'
      correctAns = $currentCorrectResponse
      forceEndRoutine = False
      startVal [time (s)] = .5
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    ImageComponent stopSignal_test
      image = stopSignal.png
      size = (0.5, 0.5)
      startEstim = .75
      startVal [time (s)] = $SSDInput
      stopVal [duration (s)] = .5
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Flow
  Routine start
  Routine StimSetup
  Routine instructions
  LoopInitiator practiceBlocks loopType="TrialHandler"
    loopType = fullRandom
    nReps = 3
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    Routine practiceBlockSetup
    LoopInitiator practiceTrials loopType="TrialHandler"
      conditionsFile = condition.xlsx
      loopType = fullRandom
      nReps = 6
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      conditions:
        [{'corrGoResp': '$currentCorrectResponse', 'shape': '$currentGoStim'},
        {'corrGoResp': None, 'shape': None},
        {'corrGoResp': None, 'shape': None},
        {'corrGoResp': None, 'shape': None}]
      Routine newPracticeStim
      Routine trial
      Routine feedback
      Routine endTrial
    LoopTerminator practiceTrials
    Routine practiceFeedback
    Routine practiceRepeat
  LoopTerminator practiceBlocks
  Routine testInstructions
  LoopInitiator stopBlocks loopType="TrialHandler"
    loopType = sequential
    nReps = numTestBlocks
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    Routine stopBlockSetup
    LoopInitiator testTrials loopType="TrialHandler"
      conditionsFile = condition.xlsx
      loopType = fullRandom
      nReps = 12
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      conditions:
        [{'corrGoResp': '$currentCorrectResponse', 'shape': '$currentGoStim'},
        {'corrGoResp': None, 'shape': None},
        {'corrGoResp': None, 'shape': None},
        {'corrGoResp': None, 'shape': None}]
      Routine newStopStim
      Routine test_trial
      Routine ssdChange
    LoopTerminator testTrials
    Routine endOfStopBlockFeedback
  LoopTerminator stopBlocks
  Routine end
