PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = simpleStopSignalTask
  keyboardBackend = ioHub
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Routines
  Routine go_trial
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
    PolygonComponent go_stim_1
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent go_stim_2
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'z','m'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2
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  Routine Intro
    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $"This is a template" + " \n on how to use" + "\n the text component" + " \n to present instructions."
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    ImageComponent image_instr1
      image = instruct1.png
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_instr2
      image = instruct2.png
      pos = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_illus
      image = click.png
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine practice
Flow
  Routine Intro
  Routine practice
  Routine go_trial
